/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "footpedals": "io/sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "29463"
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "serial": "28170"
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "serial": "15122"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "57961"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "serial": "55226"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "mtm": "MTMR",
            "psm": "PSM1",
            "configure-parameter": {
                "rotation": [[ -1.0000, 0.0000,  0.0000],
                             [ 0.0000,  -1.0000,  0.0000],
                             [ 0.0000,  0.0000,  1.0000]]

            }
        }
        ,
        {
            "mtm": "MTML",
            "psm": "PSM2",
            "configure-parameter": {
                "rotation": [[ -1.0000, 0.0000,  0.0000],
                             [ 0.0000,  -1.0000,  0.0000],
                             [ 0.0000,  0.0000,  1.0000]]

            }
        }
    ]
}
